public init, topol, basic_shape, setel, subsets, geom, biophys, geom_nseg, biophys_inhomo
public synlist, x, y, z, position, connect2target

public soma, dend
public all

objref synlist

proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  synlist = new List()
  synapses()
  x = y = z = 0 // only change via position
}

create soma, dend

proc topol() { local i
  connect dend(0), soma(0)
  basic_shape()
}
proc basic_shape() {
  soma {pt3dclear() pt3dadd(0, 0, 0, 1) pt3dadd(15, 0, 0, 1)}
  dend {pt3dclear() pt3dadd(0, 0, 0, 1) pt3dadd(-74, 0, 0, 1)}
}

objref all
proc subsets() { local i
  objref all
  all = new SectionList()
    soma all.append()
    dend all.append()

}
proc geom() {
}
external lambda_f
proc geom_nseg() {
}
proc biophys() {
  access soma {
	L = 5.64
	diam = 5.64
    Ra = 35.4
    cm = 1
    insert motoneuron
		gnabar_motoneuron	= 120e-3
		gl_motoneuron	= 0.51e-3
		gkrect_motoneuron = 100e-3
		gcaN_motoneuron = 14e-3
		gcaL_motoneuron = 0
		gcak_motoneuron = 5e-3
  }
  access dend {
	L = 50.64
	diam = 5.64
    Ra = 35.4
    cm = 1
    insert motoneuron
		gnabar_motoneuron	= 0
		gl_motoneuron	= 0.51e-3
		gkrect_motoneuron = 0
		gcaN_motoneuron = 0.3e-3
		gcaL_motoneuron = 0.33e-3
		gcak_motoneuron = 1.1e-3
	insert nap
		gbar_nap = 0.1* 1e-3
  }
}

proc setel() {
forsec all {
el_motoneuron = $1
}
}


proc biophys_inhomo(){}
proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}
obfunc connect2target() { localobj nc //$o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = 0
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}
