//Net Params

if (name_declared("mat_inh_coupling") == 5) {
inh_coupling = mat_inh_coupling
} else {
inh_coupling = 0.11
}

if (name_declared("mat_d_rge") == 5) {
d_rge = mat_d_rge
} else {
d_rge = 0.45
}

if (name_declared("mat_d_rgf") == 5) {
d_rgf = mat_d_rgf
} else {
d_rgf = 0.5
}

if (name_declared("mat_exc_coupling") == 5) {
exc_coupling = mat_exc_coupling
} else {
exc_coupling = 0.0125
}

if (name_declared("mat_gi_bar") == 5) {
gi_bar = mat_gi_bar
} else {
gi_bar = 0.05e-3
}

if (name_declared("mat_excitation") == 5) {
excitation = mat_excitation
} else {
excitation = 0
}

if (name_declared("mat_inrg_el") == 5) {
inrg_el = mat_inrg_el
} else {
inrg_el = -57.5
}

if (name_declared("mat_rg_el") == 5) {
rg_el = mat_rg_el
} else {
rg_el = -64
}

if (name_declared("mat_mn_el") == 5) {
mn_el = mat_mn_el
} else {
mn_el = -65
}

ge_bar = 0.05e-3

xopen("netbuild_large_scale")

//load_file("testing3.ses")
tstop = 30000
ena = 55

objref RG_E_v_vec[20]
objref RG_F_v_vec[20]

objref PF_E_v_vec[20]
objref PF_F_v_vec[20]

objref MN_E_v_vec[20]
objref MN_F_v_vec[20]

objref Inrg_E_v_vec[20]
objref Inrg_F_v_vec[20]

objref Iab_E_v_vec[20]

objref Ia_E_v_vec[20]
objref Ia_F_v_vec[20]

objref Ib_E_v_vec[20]
objref Ib_F_v_vec[20]

for i=0,N-1 {

RG_E_v_vec[i] = new Vector()
RG_E_v_vec[i].record(&RG_E_rg_int[i].soma.v(0.5))

RG_F_v_vec[i] = new Vector()
RG_F_v_vec[i].record(&RG_F_rg_int[i].soma.v(0.5))

PF_E_v_vec[i] = new Vector()
PF_E_v_vec[i].record(&PF_E_rg_int[i].soma.v(0.5))

PF_F_v_vec[i] = new Vector()
PF_F_v_vec[i].record(&PF_F_rg_int[i].soma.v(0.5))

Inrg_E_v_vec[i] = new Vector()
Inrg_E_v_vec[i].record(&Inrg_E_int[i].soma.v(0.5))

Inrg_F_v_vec[i] = new Vector()
Inrg_F_v_vec[i].record(&Inrg_F_int[i].soma.v(0.5))

MN_E_v_vec[i] = new Vector()
MN_E_v_vec[i].record(&Mn_E_motoneuron[i].soma.v(0.5))

MN_F_v_vec[i] = new Vector()
MN_F_v_vec[i].record(&Mn_F_motoneuron[i].soma.v(0.5))

Iab_E_v_vec[i] = new Vector()
Iab_E_v_vec[i].record(&Iab_E_int[i].soma.v(0.5))

Ia_E_v_vec[i] = new Vector()
Ia_E_v_vec[i].record(&Ia_E_int[i].soma.v(0.5))

Ia_F_v_vec[i] = new Vector()
Ia_F_v_vec[i].record(&Ia_F_int[i].soma.v(0.5))

Ib_E_v_vec[i] = new Vector()
Ib_E_v_vec[i].record(&Ib_E_int[i].soma.v(0.5))

Ib_F_v_vec[i] = new Vector()
Ib_F_v_vec[i].record(&Ib_F_int[i].soma.v(0.5))

}

init()
run()

objref RG_E_v_file
objref RG_F_v_file

objref PF_E_v_file
objref PF_F_v_file

objref MN_E_v_file
objref MN_F_v_file

objref Inrg_E_v_file
objref Inrg_F_v_file

objref Iab_E_v_file

objref Ia_E_v_file
objref Ia_F_v_file

objref Ib_E_v_file
objref Ib_F_v_file

strdef filename

for i=0,N-1 {

RG_E_v_file = new File()
sprint(filename, "%s%d%s", "RG_E_v_", i,".txt")
RG_E_v_file.wopen(filename)
RG_E_v_vec[i].printf(RG_E_v_file)
RG_E_v_file.close

RG_F_v_file = new File()
sprint(filename, "%s%d%s", "RG_F_v_", i,".txt")
RG_F_v_file.wopen(filename)
RG_F_v_vec[i].printf(RG_F_v_file)
RG_F_v_file.close

PF_E_v_file = new File()
sprint(filename, "%s%d%s", "PF_E_v_", i,".txt")
PF_E_v_file.wopen(filename)
PF_E_v_vec[i].printf(PF_E_v_file)
PF_E_v_file.close

PF_F_v_file = new File()
sprint(filename, "%s%d%s", "PF_F_v_", i,".txt")
PF_F_v_file.wopen(filename)
PF_F_v_vec[i].printf(PF_F_v_file)
PF_F_v_file.close

Inrg_E_v_file = new File()
sprint(filename, "%s%d%s", "INRG_E_v_", i,".txt")
Inrg_E_v_file.wopen(filename)
Inrg_E_v_vec[i].printf(Inrg_E_v_file)
Inrg_E_v_file.close

Inrg_F_v_file = new File()
sprint(filename, "%s%d%s", "INRG_F_v_", i,".txt")
Inrg_F_v_file.wopen(filename)
Inrg_F_v_vec[i].printf(Inrg_F_v_file)
Inrg_F_v_file.close

MN_E_v_file = new File()
sprint(filename, "%s%d%s", "MN_E_v_", i,".txt")
MN_E_v_file.wopen(filename)
MN_E_v_vec[i].printf(MN_E_v_file)
MN_E_v_file.close

MN_F_v_file = new File()
sprint(filename, "%s%d%s", "MN_F_v_", i,".txt")
MN_F_v_file.wopen(filename)
MN_F_v_vec[i].printf(MN_F_v_file)
MN_F_v_file.close

Iab_E_v_file = new File()
sprint(filename, "%s%d%s", "Iab_E_v_", i,".txt")
Iab_E_v_file.wopen(filename)
Iab_E_v_vec[i].printf(Iab_E_v_file)
Iab_E_v_file.close

Ia_E_v_file = new File()
sprint(filename, "%s%d%s", "Ia_E_v_", i,".txt")
Ia_E_v_file.wopen(filename)
Ia_E_v_vec[i].printf(Ia_E_v_file)
Ia_E_v_file.close

Ia_F_v_file = new File()
sprint(filename, "%s%d%s", "Ia_F_v_", i,".txt")
Ia_F_v_file.wopen(filename)
Ia_F_v_vec[i].printf(Ia_F_v_file)
Ia_F_v_file.close

Ib_E_v_file = new File()
sprint(filename, "%s%d%s", "Ib_E_v_", i,".txt")
Ib_E_v_file.wopen(filename)
Ib_E_v_vec[i].printf(Ib_E_v_file)
Ib_E_v_file.close

Ib_F_v_file = new File()
sprint(filename, "%s%d%s", "Ib_F_v_", i,".txt")
Ib_F_v_file.wopen(filename)
Ib_F_v_vec[i].printf(Ib_F_v_file)
Ib_F_v_file.close

}
