
begintemplate Ia_axon_Cell
public is_art
public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo, setv
public synlist, x, y, z, position, connect2target

/* a template is a class definition that doesn't have access to the functions 
and variables defined in the main body of the script unless you specifically point it to each one.
*/
external lambda_f, n_nodes, get_diam, get_L, get_INL, mat_n_nodes, tempdata_address, Ia_geom_file
public soma, Ia_node, Ia_paranode
public all

objref synlist
	//print "Going to make ", n_nodes(), "sections"
	create Ia_node[n_nodes()]
	create Ia_paranode[n_nodes()]

proc init() {
  topol()
  subsets()
  basic_shape()
  geom_nseg()
  //geom()
  biophys()
  synlist = new List()
  synapses()
  x = y = z = 0 // only change via position
}

  
proc topol() { local ii
  //count = 0
	for (ii = 0; ii<= n_nodes()-1;ii = ii+1){
		//print "Connecting node ", ii
		connect Ia_paranode[ii](0), Ia_node[ii](1)
		if (ii != n_nodes()-1) {connect Ia_node[ii+1](0), Ia_paranode[ii](1)}
		//count = count+1
	}
}

objref all
proc subsets() { local ii
  objref all
  all = new SectionList()
	for ii = 0, n_nodes()-1 {
    Ia_node[ii] all.append()
    Ia_paranode[ii] all.append()
	}

}

proc geom() {
	for ii = 0, n_nodes()-1 {
    Ia_node[ii] {  diam = get_diam()  L = get_L()  }
    Ia_paranode[ii] {  diam = get_diam()  L = get_INL()*get_L()  }
	}
}

proc geom_nseg() {
	for ii = 0, n_nodes()-1 {
    Ia_node[ii] { nseg = int((L/(0.1*lambda_f(100))+.999)/2)*2 + 1  }
    Ia_paranode[ii] { nseg = int((L/(0.1*lambda_f(100))+.999)/2)*2 + 1 }
	}
}

proc biophys() {
	Base_Ra = 70
	
	for ii = 0, n_nodes()-1 {
	Ia_node[ii] {
    Ra = Base_Ra
    cm = 2
    insert axnode
    

    insert extracellular{
      xg[0]=1e10
      xg[1]=1e10
      xc[0]=0
      xc[1]=0
      xraxial[0]=1e20
      xraxial[1]=1e20
      e_extracellular=0
      }
	
	//insert extracellular
	  
  }
  
  Ia_paranode[ii] {
    Ra = Base_Ra
    cm = 2
	//cm = 0.1/(2*9.15*diam+2*30)
	insert pas
      g_pas=0.001/(2*9.15*diam+2*30)
      e_pas=-80
	
    insert extracellular{
      xg[0]=1e10
      xg[1]=1e10
      xc[0]=0
      xc[1]=0
      xraxial[0]=1e20
      xraxial[1]=1e20
      e_extracellular=0
      }
	
	//insert extracellular
  }
}
}

proc basic_shape() {
xopen(Ia_geom_file)
}

proc setv() {
forall {
v = $1
}
}

proc position() { local i
  Ia_node[0] for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}

obfunc connect2target() { localobj nc //$o1 target point process, optional $o2 returned NetCon
  Ia_node[n_nodes()-1] nc = new NetCon(&v(1), $o1)
  nc.threshold = 10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}

objref syn_
proc synapses() {
}

func is_art() { return 0 }
endtemplate Ia_axon_Cell
