begintemplate Motoneuron_Cell

public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo, setv
public synlist, x, y, z, position, connect2target
external lambda_f, mn_geom_file
public soma, dend

objref synlist
proc init() {
  //print "Making motoneuron"
  //print mn_geom_file
  topol()
  basic_shape()
  subsets()
  geom_nseg()
  biophys()
  synlist = new List()
  print "Synlist exists, god damnit!!!"
  synapses()
  x = y = z = 0 // only change via position
}

xopen(mn_geom_file)

objref syn_

proc synapses() {
	/* E0 */
	dend[1] syn_ = new ExpSyn(0.5)
	
	synlist.append(syn_)
	syn_.tau = 3
}

proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}

obfunc connect2target() { localobj nc //$o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = 10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}
//print "made it past syn_"

proc setv() {
	forsec all {
		v = $1
	}
}

func is_art() { return 0 }

endtemplate Motoneuron_Cell